PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'Prolific ID': '', 'Age (in years)': '', 'Gender at birth (f/m)': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1855, 1176]
  expName = bim_14102020
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Routines
  Routine endText
    TextComponent ThankYou_text
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you for completing the experiment.



        Please wait for the experiment to close after you press SPACE to finish.
    KeyboardComponent space_to_finish
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      store = nothing
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    TextComponent spaceTextBottom_6
      color = black
      letterHeight = 0.02
      pos = (0, -0.40)
      saveStartStop = False
      startVal [time (s)] = 3
      text = Press SPACE to finish
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
  Routine oFix
    TextComponent orangeFixCross
      color = $[1.000,0.004,-1.000]
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = +
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    CodeComponent skip_and_calcFBTime
      Code Type = Auto->JS
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  Routine preFix
    CodeComponent skipUnlessSix_1
      Code Type = Auto->JS
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      Each Frame:
        if (trialCounter !=1):

            continueRoutine = False
    TextComponent fixCross
      color = black
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = +
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  Routine trailFeedback
    ImageComponent feedbackText_image
      image = feedbackTextImage.png
      saveStartStop = False
      size = (0.6, 0.3)
      startVal [time (s)] = 0.0
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    CodeComponent skipUnlessSix_2
      Code Type = JS
      Each JS Frame:
        //skip unless it is trial 6
        if ((trialCounter !== 6)) {
            continueRoutine = false;
        }
    KeyboardComponent spaceToSkip
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3.0
      store = nothing
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    TextComponent spaceTextBottom
      color = black
      letterHeight = 0.02
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 3
      text = Press SPACE to continue
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    TextComponent errorText
      letterHeight = 0.075
      pos = (0.11, 0.06)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent timeText
      letterHeight = 0.075
      pos = (0.11, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent lastTrial_topText
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Previous Trial
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    CodeComponent feedbackGeneration
      Code Type = Auto->JS
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    TextComponent orientation_text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = This was the orientation part. 
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  Routine PIS
    ImageComponent PIS_page1
      image = PIS_LASSO_1.jpg
      opacity = 0
      saveStartStop = False
      size = (0.58334, 0.825)
      startVal [time (s)] = 0.0
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    ImageComponent PIS_page2
      image = PIS_LASSO_2.jpg
      opacity = 0
      saveStartStop = False
      size = (0.58334, 0.825)
      startVal [time (s)] = 0.0
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    ImageComponent PIS_page3
      image = PIS_LASSO_3.jpg
      opacity = 0
      saveStartStop = False
      size = (0.58334, 0.825)
      startVal [time (s)] = 0.0
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    KeyboardComponent PIS_resp
      allowedKeys = 'space'
      correctAns = $'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
      store = nothing
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    TextComponent PISText
      color = black
      letterHeight = 0.05
      pos = (0, 0.46)
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        Any text

        including line breaks
    CodeComponent eachPIScode
      Code Type = JS
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      Begin JS Experiment:
        //beginning of experiment set PIS slide counter to zero
        PISCounter = 0;
      Begin JS Routine:
        //hide mouse
        document.body.style.cursor='none';

        //PIS slide counter
        PISCounter = (PISCounter + 1);

        PIS_page1.opacity = 0;
        PIS_page2.opacity = 0;
        PIS_page3.opacity = 0;


        if ((PISCounter === 1)) {
            PISText.text = "Participant Information Sheet 1 of 3";
            PIS_page1.opacity = 1;
        }
        if ((PISCounter === 2)) {
            PISText.text = "Participant Information Sheet 2 of 3";
            PIS_page2.opacity = 1;
        }
        if ((PISCounter === 3)) {
            PISText.text = "Participant Information Sheet 3 of 3";
            PIS_page3.opacity = 1;
        }
    TextComponent spaceTextBottom_PIS
      color = black
      letterHeight = 0.02
      pos = (0, -0.46)
      saveStartStop = False
      startVal [time (s)] = 5
      text = Press SPACE to continue
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  Routine Consent
    SliderComponent ConsentSlider
      color = black
      forceEndRoutine = True
      granularity = 0
      labels = "no","yes"
      pos = (0, -0.25)
      saveStartStop = False
      size = (0.4, 0.03 )
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['radio']
      ticks = (0, 1)
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    TextComponent consentTopText
      color = black
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Consent Questions
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    TextComponent CQN
      color = black
      letterHeight = 0.02
      pos = (0, 0.18)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    TextComponent consentText
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    CodeComponent eachConsentCode
      Code Type = JS
      Begin JS Experiment:
        consentCounter = 0;
        consentSum = 0;
      Begin JS Routine:
        //show mouse cursor
        document.body.style.cursor='default';

        //count the current consent question
        consentCounter = (consentCounter + 1);

        if ((consentCounter === 1)) {
            consentText.text = "I confirm that I am 18-40 years old.";
            CQN.text = "Question 1 of 7";
            }
        if ((consentCounter === 2)) {
            consentText.text = "I confirm that I have read and understand the information sheet version 1.0 dated July 2017 for the above study. I have had the opportunity to consider the information, ask questions and have had these answered satisfactorily.";
            CQN.text = "Question 2 of 7";
            }
        if ((consentCounter === 3)) {
            consentText.text = "I understand that my participation is voluntary and that I am free to withdraw at any time, without giving any reason, and without any adverse consequences or academic penalty.";
            CQN.text = "Question 3 of 7";
            }
        if ((consentCounter === 4)) {
            consentText.text = "I understand that research data collected during the study may be looked at by designated individuals from the University of Oxford where it is relevant to my taking part in this study. I give permission for these individuals to access my data.";
            CQN.text = "Question 4 of 7";
            }
        if ((consentCounter === 5)) {
            consentText.text = "I understand that this project has been reviewed by, and received ethics clearance through, the University of Oxford Central University Research Ethics Committee.";
            CQN.text = "Question 5 of 7";
            }
        if ((consentCounter === 6)) {
            consentText.text = "I understand who will have access to personal data provided, how the data will be stored and what will happen to the data at the end of the project.";
            CQN.text = "Question 6 of 7";
            }
        if ((consentCounter === 7)) {
            consentText.text = "I understand how this research will be written up and published. I agree that anonymised data will be shared on data repositories. I agree to take part in the study.";
            CQN.text = "Question 7 of 7";
            }
      End JS Routine:
        //at the end of each consent question add the response, 1 if yes, to the sum to later check if all were consented to
        consentSum = consentSum + ConsentSlider.getRating();
        routineTimer.reset();
        //routineTimer reset is so it doesnt skip the first or last trial
    ImageComponent timeline_LASSO_consent
      image = timeline_LASSO_consent.png
      pos = (0, 0.4)
      saveStartStop = False
      size = (1.4, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent click_instr_text_2
      color = black
      letterHeight = 0.02
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Use the left mouse button to click one of the response circles.
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  Routine BimanualQs
    TextComponent BIMQ_topText
      color = black
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Questionnaire 1 of 2
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    TextComponent questionText
      color = black
      letterHeight = 0.03
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    TextComponent responseText
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    TextComponent BIMQN
      color = black
      letterHeight = 0.02
      pos = (0, 0.29)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    TextComponent lastAnswerText
      letterHeight = 0.02
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent BIMQBottomText
      color = black
      letterHeight = 0.02
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        If you DO perform any activities in the category, type your answer(s) and press ENTER.
        Separate multiple answers with SPACE or COMMA.

        If you DO NOT perform any activities in the category, press ENTER to skip the question.
    CodeComponent set_responseTextCode
      Code Type = JS
      Begin JS Experiment:
        //counter for which BIMQ slide suject is on
        BIMQCounter = 0;
        //create lastanswer which is what appears above follow up questions
        var lastAnswer = "";
      Begin JS Routine:
        BIMQCounter = BIMQCounter+1;

        //code for the typed responses
        modify = false;
        responseText.text = '';
        if (BIMQCounter === 1){
            questionText.text="1. Do you do any sport(s) or hobby/hobbies involving both hands?\n(e.g. Rugby, Volleyball, Sewing, etc)\n\n\n\nA. If yes, which sport(s) or hobby/hobbies?";
            BIMQN.text = "Question 1a";
        }
        if (BIMQCounter === 2){
            questionText.text="1. Do you do any sport(s) or hobby/hobbies involving both hands?\n(e.g. Rugby, Volleyball, Sewing, etc)\n\n\n\nB. Since when in years/months (e.g. for 11 years/for 3 months)?";
            BIMQN.text = "Question 1b";
            lastAnswerText.text = lastAnswer;
        }
        if (BIMQCounter === 3){
            questionText.text="1. Do you do any sport(s) or hobby/hobbies involving both hands?\n(e.g. Rugby, Volleyball, Sewing, etc)\n\n\n\nC. How often in the last six months (monthly/fortnight/weekly/daily)?";
            BIMQN.text = "Question 1c";
            lastAnswerText.text = lastAnswer;
        }
        if (BIMQCounter === 4){
            questionText.text="1. Do you do any sport(s) or hobby/hobbies involving both hands?\n(e.g. Rugby, Volleyball, Sewing, etc)\n\n\n\nD. For how long at once, specify hours/minutes (e.g. 1.5 hours)?";
            BIMQN.text = "Question 1d";
            lastAnswerText.text = lastAnswer;
        }
        if (BIMQCounter === 5){
            questionText.text="2. Do you type on any device(s) using both hands/thumbs?\n(e.g. Phone, Computer, Tablet, etc) \n\n\n\nA. If yes, which device(s)?";
            BIMQN.text = "Question 2a";
            lastAnswerText.text = " ";
            }
        if (BIMQCounter === 6){
            questionText.text="2. Do you type on any device(s) using both hands/thumbs?\n(e.g. Phone, Computer, Tablet, etc) \n\n\n\nB. Since when in years/months (e.g. for 11 years/for 3 months)?";
            BIMQN.text = "Question 2b";
            lastAnswerText.text = lastAnswer;
            }
        if (BIMQCounter === 7){
            questionText.text="2. Do you type on any device(s) using both hands/thumbs?\n(e.g. Phone, Computer, Tablet, etc) \n\n\n\nC. How often in the last six months (monthly/fortnight/weekly/daily)?";
            BIMQN.text = "Question 2c";
            lastAnswerText.text = lastAnswer;
        }
        if (BIMQCounter === 8){
            questionText.text="2. Do you type on any device(s) using both hands/thumbs?\n(e.g. Phone, Computer, Tablet, etc) \n\n\n\nD. For how long at once, specify hours/minutes (e.g. 1.5 hours)?";
            BIMQN.text = "Question 2d";
            lastAnswerText.text = lastAnswer;
        }
        if (BIMQCounter === 9){
            questionText.text="3. Do you play videogames using any device(s) involving both hands?\n(e.g. Keyboard, Controller, Joysticks, etc)\n\n\n\nA. If yes, which device(s)?";
            BIMQN.text = "Question 3a";
            lastAnswerText.text = " ";
        }
        if (BIMQCounter === 10){
            questionText.text="3. Do you play videogames using any device(s) involving both hands?\n(e.g. Keyboard, Controller, Joysticks, etc)\n\n\n\nB. Since when in years/months (e.g. for 11 years/for 3 months)?";
            BIMQN.text = "Question 3b";
            lastAnswerText.text = lastAnswer;
        }
        if (BIMQCounter === 11){
            questionText.text="3. Do you play videogames using any device(s) involving both hands?\n(e.g. Keyboard, Controller, Joysticks, etc)\n\n\n\nC. How often in the last six months (monthly/fortnight/weekly/daily)?";
            BIMQN.text = "Question 3c";
            lastAnswerText.text = lastAnswer;
        }
        if (BIMQCounter === 12){
            questionText.text="3. Do you play videogames using any device(s) involving both hands?\n(e.g. Keyboard, Controller, Joysticks, etc)\n\n\n\nD.For how long at once, specify hours/minutes (e.g. 1.5 hours)?";
            BIMQN.text = "Question 3d";
            lastAnswerText.text = lastAnswer;
        }
        if (BIMQCounter === 13){
            questionText.text="4. Do you currently play any musical instrument(s) involving both hands?\n(e.g. Guitar, Piano, Violin, etc)\n\n\n\nA. If yes, which musical instrument(s)?";
            BIMQN.text = "Question 4a";
            lastAnswerText.text = " ";
        }
        if (BIMQCounter === 14){
            questionText.text="4. Do you currently play any musical instrument(s) involving both hands?\n(e.g. Guitar, Piano, Violin, etc)\n\n\n\nB. Since when in years/months (e.g. for 11 years/for 3 months)?";
            BIMQN.text = "Question 4b";
            lastAnswerText.text = lastAnswer;
        }
        if (BIMQCounter === 15){
            questionText.text="4. Do you currently play any musical instrument(s) involving both hands?\n(e.g. Guitar, Piano, Violin, etc)\n\n\n\nC. How often in the last six months (e.g. monthly/fortnight/weekly/daily)?";
            BIMQN.text = "Question 4c";
            lastAnswerText.text = lastAnswer;
            }
        if (BIMQCounter === 16){
            questionText.text="4. Do you currently play any musical instrument(s) involving both hands?\n(e.g. Guitar, Piano, Violin, etc)\n\n\n\nD. For how long at once, specify hours/minutes (e.g. 1.5 hours)?";
            BIMQN.text = "Question 4d";
            lastAnswerText.text = lastAnswer;
        }
      Each JS Frame:
        //code for the typed responses each frame

        let theseKeys = psychoJS.eventManager.getKeys();
        if (theseKeys.length > 0) {
          textAdd = theseKeys[theseKeys.length-1];
        }
        if (textAdd === 'return') {
            textAdd = '';
            continueRoutine = false;
        }
        else if (textAdd === 'space') {
            textAdd = ' ';
        }
        else if (textAdd === 'comma') {
            textAdd = ',';
        }
        else if (textAdd === 'period') {
            textAdd = '.';
        }
        else if (textAdd === 'minus') {
            textAdd = '-';
        }
        else if (textAdd === 'equal') {
            textAdd = '+';
        }
        else if (textAdd === 'left') {
            textAdd = '';
        }
        else if (textAdd === 'right') {
            textAdd = '';
        }
        else if (textAdd === 'up') {
            textAdd = '';
        }
        else if (textAdd === 'down') {
            textAdd = '';
        }
        else if (textAdd === 'slash') {
            textAdd = '/';
        }
        else if (textAdd === 'backslash') {
            textAdd = '';
        }
        else if (textAdd === 'bracketright') {
            textAdd = '';
        }
        else if (textAdd === 'bracketleft') {
            textAdd = '';
        }
        else if (textAdd === 'apostrophe') {
            textAdd = '';
        }
        else if (textAdd === 'semicolon') {
            textAdd = ';';
        }
        else if (textAdd === 'backspace') {
            responseText.text = responseText.text.slice(0, -1);
            textAdd = undefined;
        }
        else if (['lshift', 'rshift'].includes(textAdd)) {
            modify = true;
        }
        else if (textAdd !== undefined) {
            if (modify) {
                responseText.text = responseText.text + textAdd.toUpperCase();
                modify = false;
            }
            else {
                responseText.text = responseText.text + textAdd;
            }
            textAdd = undefined;
        }
      End JS Routine:
        //code for saving the typed response to the data file at end of routine

        var BIMvarString = "temp";
        var columnLabel = "temp";
        var BIMQString = "BIM question";
        var BIMvar;
        for (BIMvar=1; BIMvar<17; BIMvar++){
            if (BIMQCounter == BIMvar){
                BIMvarString = String(BIMvar)
                columnLabel = BIMQString.concat(BIMvarString);
                psychoJS.experiment.addData(columnLabel, responseText.text);
                }
            }

        //set lastanswer text to show the first answer they gave for the follow up questions
        if (BIMQCounter === 1||BIMQCounter === 5 ||BIMQCounter === 9||BIMQCounter === 13){
            lastAnswer = responseText.text;
        }

        //reset test for next question
        responseText.setText('');
    PolygonComponent whiteLine
      fillColor = $[1,1,1]
      lineWidth = 2
      pos = (0, -0.18)
      saveStartStop = False
      shape = line
      size = (0.5, 0.3)
      startVal [time (s)] = 0.0
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  Routine AMI
    SliderComponent AMI_slider
      color = black
      forceEndRoutine = True
      granularity = 1
      labels = "1\nstrongly disagree","2","3","4","5","6", "7\nstrongly agree"
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.6, 0.025)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['radio']
      ticks = (1,2,3,4,5,6,7)
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    TextComponent AMIText
      color = black
      letterHeight = 0.03
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    TextComponent AMI_topText
      color = black
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Questionnaire 2 of 2
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    TextComponent AMIQN
      color = black
      letterHeight = 0.02
      pos = (0, 0.28)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    CodeComponent eachAMIcode
      Code Type = Auto->JS
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    TextComponent click_instr_text
      color = black
      letterHeight = 0.02
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Use the left mouse button to click one of the response circles.
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  Routine welcome
    KeyboardComponent welcome_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
      store = nothing
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    TextComponent WelcomeText
      color = black
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to our experiment and thank you for participating.




        On the next pages, you find general information about the study
        and the consent questions.


        If you respond 'NO' to any of the consent questions, your participation is cancelled
        and no data is recorded!



        In the experiment, once you go forward with space, you cannot go back.
        If you wish to exit the experiment, press ESC or close the study window/tab.
    TextComponent spaceTextBottom_4
      color = black
      letterHeight = 0.02
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 5
      text = Press SPACE to continue
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    ImageComponent timeline_LASSO_welcome
      image = timeline_LASSO_welcome.png
      pos = (0, 0.4)
      saveStartStop = False
      size = (1.4, 0.5)
      startVal [time (s)] = 0.0
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  Routine BIMQinstr
    CodeComponent quit_if_no_consent
      Code Type = Auto->JS
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    KeyboardComponent BIMQ_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
      store = nothing
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    TextComponent BIMQinstrText
      color = black
      letterHeight = 0.02
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        The following questionnaire asks you about four categories:​

        1. Sports, hobbies ​
        2. Keyboard, phone typing​
        3. Video game devices
        4. Musical instruments
        ​

        For each category, you are asked separately:

        a) Which activities in this category you perform (can be one or more)​?
        b) Since when​?
        c) How often in the last 6 months?
        d) For how long in one session?


        If you DO perform any activities in the category, type your answer(s) and press ENTER.
        Separate multiple answers with SPACE or COMMA.

        If you DO NOT perform any activities in the category, press ENTER to skip the question.
    TextComponent spaceTextBottom_3
      color = black
      letterHeight = 0.02
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 5
      text = Press SPACE to continue
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    ImageComponent timeline_LASSO_Q1
      image = timeline_LASSO_Q1.png
      pos = (0, 0.4)
      saveStartStop = False
      size = (1.4, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent BIMQ_topText_2
      color = black
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Questionnaire 1 of 2
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  Routine AMIinstr
    KeyboardComponent AMI_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
      store = nothing
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    TextComponent AMIinstrText
      color = black
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The following questionnaire provides statements.


        Please answer each statement ranging from strongly agree to strongly disagree.​


        There is no right or wrong answer, please answer intuitively.
    TextComponent spaceTextBottom_2
      color = black
      letterHeight = 0.02
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 5
      text = Press SPACE to continue
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    ImageComponent timeline_LASSO_Q2
      image = timeline_LASSO_Q2.png
      pos = (0, 0.4)
      saveStartStop = False
      size = (1.4, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent AMI_topText_2
      color = black
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Questionnaire 2 of 2
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  Routine INS
    KeyboardComponent space_to_continue_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
      store = nothing
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    CodeComponent eachINScode
      Code Type = JS
      Begin JS Experiment:
        instructionCounter = 0;
      Begin JS Routine:
        //hide mouse
        document.body.style.cursor='none';

        instructionCounter = instructionCounter+1;

        if (instructionCounter === 1){
            INS_topText.text = "Task Instructions 1 of 5";
            INS_image_name = "INS1x.png";
        }
        if (instructionCounter === 2){
            INS_topText.text = "Task Instructions 2 of 5";
            INS_image_name = "INS2x.png";
        }
        if (instructionCounter === 3){
            INS_topText.text = "Task Instructions 3 of 5";
            INS_image_name = "INS3x.png";
        }
        if (instructionCounter === 4){
            INS_topText.text = "Task Instructions 4 of 5";
            INS_image_name = "INS4x.png";
        }
        if (instructionCounter === 5){
            INS_topText.text = "Task Instructions 5 of 5";
            INS_image_name = "INS5x.png";
        }
    ImageComponent INS_image
      image [set every repeat] = $INS_image_name
      saveStartStop = False
      size = (1.778, 1)
      startVal [time (s)] = 0.0
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    TextComponent INS_topText
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent timeline_LASSO_instructions
      image = timeline_LASSO_instructions.png
      pos = (0, 0.4)
      saveStartStop = False
      size = (1.4, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent spaceTextBottom_5
      color = black
      letterHeight = 0.02
      pos = (0, -0.44)
      saveStartStop = False
      startVal [time (s)] = 5
      text = Press SPACE to continue
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    ImageComponent loadINS1
      image = INS1x.png
      opacity = 0
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent loadINS2
      image = INS2x.png
      opacity = 0
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent loadINS3
      image = INS3x.png
      opacity = 0
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent loadINS4
      image = INS4x.png
      opacity = 0
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent loadINS5
      image = INS5x.png
      opacity = 0
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine saveBlockData
    CodeComponent saveBlockData_code
      Code Type = Auto->JS
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  Routine part_text
    CodeComponent set_PartText
      Code Type = Auto->JS
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    ImageComponent Part_text_image
      image [set every repeat] = $Part_text_image_name
      saveStartStop = False
      size = (1.778, 1)
      startVal [time (s)] = 0.0
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    TextComponent partText
      color = black
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent enter_to_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
      store = nothing
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    TextComponent spaceTextBottom_7
      color = black
      letterHeight = 0.02
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 5
      text = Press SPACE to start
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    ImageComponent timeline_LASSO_orientation
      image = timeline_LASSO_orientation1.png
      pos = (0, 0.4)
      saveStartStop = False
      size = (1.4, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent timeline_LASSO_part1
      image = timeline_LASSO_part1.png
      pos = (0, 0.4)
      saveStartStop = False
      size = (1.4, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent timeline_LASSO_part2
      image = timeline_LASSO_part2.png
      pos = (0, 0.4)
      saveStartStop = False
      size = (1.4, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent timeline_LASSO_part3
      image = timeline_LASSO_part3.png
      pos = (0, 0.4)
      saveStartStop = False
      size = (1.4, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent set_otherThings
      Code Type = JS
      Begin JS Routine:
        //code to change text shownn before each part of experiment
        if (trialCounter === 1 && blockCounter === 1){
            partText.text = "Orientation 1"
            timeline_LASSO_orientation.opacity = 1;
            orientation2_2.opacity = 0;
            orientation3_2.opacity = 0;
            timeline_LASSO_part1.opacity = 0;
            timeline_LASSO_part2.opacity = 0;
            timeline_LASSO_part3.opacity = 0;
        }
        if (trialCounter === 1 && blockCounter === 7){
            partText.text = "Orientation 2"
            timeline_LASSO_orientation.opacity = 0;
            orientation2_2.opacity = 1;
            orientation3_2.opacity = 0;
            timeline_LASSO_part1.opacity = 0;
            timeline_LASSO_part2.opacity = 0;
            timeline_LASSO_part3.opacity = 0;
        }
        if (trialCounter === 1 && blockCounter === 108){
            partText.text = "Orientation 3"
            timeline_LASSO_orientation.opacity = 0;
            orientation2_2.opacity = 0;
            orientation3_2.opacity = 1;
            timeline_LASSO_part1.opacity = 0;
            timeline_LASSO_part2.opacity = 0;
            timeline_LASSO_part3.opacity = 0;
        }
        if (trialCounter === 1 && blockCounter === 2){
            partText.text = "Part 1"
            timeline_LASSO_orientation.opacity = 0;
            orientation2_2.opacity = 0;
            orientation3_2.opacity = 0;
            timeline_LASSO_part1.opacity = 1;
            timeline_LASSO_part2.opacity = 0;
            timeline_LASSO_part3.opacity = 0;
        }
        if (trialCounter === 1&& blockCounter===8){
            partText.text = "Part 2"
            timeline_LASSO_orientation.opacity = 0;
            orientation2_2.opacity = 0;
            orientation3_2.opacity = 0;
            timeline_LASSO_part1.opacity = 0;
            timeline_LASSO_part2.opacity = 1;
            timeline_LASSO_part3.opacity = 0;
        }
        if (trialCounter === 1&&blockCounter === 109){
            partText.text = "Part 3"
            timeline_LASSO_orientation.opacity = 0;
            orientation2_2.opacity = 0;
            orientation3_2.opacity = 0;
            timeline_LASSO_part1.opacity = 0;
            timeline_LASSO_part2.opacity = 0;
            timeline_LASSO_part3.opacity = 1;
        }
      Each JS Frame:
        if (trialCounter !== 1) {
            continueRoutine = false;
        }
        if ([1,2,7,8,108,109].includes(blockCounter) !== true){
            continueRoutine = false;
        }
    ImageComponent loadPartImage1
      image = partINS_test1x.png
      opacity = 0
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent loadPartImage2
      image = partINS_test2x.png
      opacity = 0
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent loadPartImage3
      image = partINS_test3x.png
      opacity = 0
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent loadPartImage_ori
      image = partINS_orix1.png
      opacity = 0
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent loadPartImage_training
      image = partINS_trainingx.png
      opacity = 0
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent loadPartimage_ori2
      image = partINS_orix2.png
      opacity = 0
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent loadPartimage_ori3
      image = partINS_orix3.png
      opacity = 0
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent orientation2_2
      image = timeline_LASSO_orientation2.png
      pos = (0, 0.4)
      saveStartStop = False
      size = (1.4, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent orientation3_2
      image = timeline_LASSO_orientation3.png
      pos = (0, 0.4)
      saveStartStop = False
      size = (1.4, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent loadPartImage_ori_training
      image = partINS_orix.png
      opacity = 0
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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
  Routine set_each_block
    CodeComponent set_each_block_code
      Code Type = JS
      Begin JS Experiment:
        //blockCounter counts which block we are on in total
        blockCounter= 0;

        //testBlockCounter counts which test block we are on from 1 to 5, and resets for the posttest
        testBlockCounter = 0;

        //depending on the blockCounter, the trialtype is set from 1 to 4 in order ori,pre,train,post
        trialType = 0;
      Begin JS Routine:
        blockCounter = blockCounter +1;

        //set the trialType depending on the total block
        if (blockCounter === 1){
            trialType = 1;
        } else if ([2,3,4,5,6].includes(blockCounter)){
            trialType = 2;
        }  else if ([7].includes(blockCounter)){
            trialType = 1;
        } else if ([8,9,10,11,12,13,14,15,16,17,18,19,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107].includes(blockCounter)){
            trialType = 3;
        }      else if ([108].includes(blockCounter)){
            trialType = 1;
        } else if ([109,110,111,112, 113].includes(blockCounter)){
            trialType = 4;
            }

        //reset testBlockCounter for the begining of each test, pre and post
        if (trialType === 2 || trialType ===4 || trialType ===5|| trialType ===6){
            testBlockCounter = testBlockCounter +1;
            if (testBlockCounter === 6){
                testBlockCounter = 1;
                }
            }

        //trialCounter counts from 1 to 6, which trial in the block is active
        trialCounter = 0;

        //testTrialCounter is the same as trialCounter but for the testBlocks
        testTrialCounter = 0;

        //get the condition info from the dialogue box at the beginning
        condInfo = 15 //parseInt(expInfo["training condition (1-15)*"], 10);


        list_of_thetas_Conditions = [thetas_Condition1, thetas_Condition2, thetas_Condition3, thetas_Condition4, thetas_Condition5];


        //set training condition
        if ([1,2,3].includes(condInfo)){
            alloCondition = list_of_thetas_Conditions[0];
        };
        if ([4,5,6].includes(condInfo)){
            alloCondition = list_of_thetas_Conditions[1];
        };
        if ([7,8,9].includes(condInfo)){
            alloCondition = list_of_thetas_Conditions[2];
        };
        if ([10,11,12].includes(condInfo)){
            alloCondition = list_of_thetas_Conditions[3];
        };
        if ([13,14,15].includes(condInfo)){
            alloCondition = list_of_thetas_Conditions[4];
        };

        //set test condition
        if ([1,4,7,10,13].includes(condInfo)){
            testCondition = 1;
        };
        if ([2,5,8,11,14].includes(condInfo)){
            testCondition = 2;
        };
        if ([3,6,9,12,15].includes(condInfo)){
            testCondition = 3;
        };


        //setting thetas for orientation blocks which are always the first one
        if (trialType === 1){
            thetasDeg = [45,45,45,45,45,45];
            }

        //set thetas for training blocks
        if (trialType === 3){
            thetasDeg = [alloCondition[blockCounter-1][0],
            alloCondition[blockCounter-1][1],
            alloCondition[blockCounter-1][2],
            alloCondition[blockCounter-1][3],
            alloCondition[blockCounter-1][4],
            alloCondition[blockCounter-1][5]];
            }

        thetas = [];
        var thetaVar;
        for (thetaVar=0; thetaVar<6; thetaVar++){
            thetas.push(thetasDeg[thetaVar] * Math.PI / 180)
            }

        //pathCounter is similar to trialCounter
        pathCounter = 0;
        trialCounter = 0;
  Routine set_each_trial
    CodeComponent set_each_trial_code
      Code Type = JS
      Begin JS Experiment:
        //testType is a value from 0 to 18 corresponding to the type of test street for the trial, 0 is no testype
        testType = 0;
        testTypeINFO=[0,0,0,0,0,0];
      Begin JS Routine:
        trialCounter = (trialCounter + 1);

        //only one street is displayed
        if (blockCounter===1 || blockCounter===7 ||blockCounter===108){
            if (trialCounter >0 || testTrialCounter>0){
                trials.finished=1;
                }
            }

        //add to testTrialCouunter if it is test trialType
        if (trialType === 2 || trialType ===4 || trialType ===5|| trialType ===6){
            testTrialCounter = testTrialCounter + 1;
            }

        testOrder_narrow = [
          [5,2,6,3,4,1],
          [3,6,5,2,1,4],
          [4,6,2,1,5,3],
          [2,3,1,5,4,6],
          [6,4,2,1,3,5]
        ];
        testOrder_med = [
          [11,8,12,9,10,7],
          [9,12,11,8,7,10],
          [10,12,8,7,11,9],
          [8,9,7,11,10,12],
          [12,10,8,7,9,11]
        ];
        testOrder_wide = [
          [17,14,18,15,16,13],
          [15,18,17,14,13,16],
          [16,18,14,13,17,15],
          [14,15,13,17,16,18],
          [18,16,14,13,15,17]
          ];

        test_ori_Order_narrow = [
          [3,3,3,3,3,3]
          ];

        test_ori_Order_med = [
          [9,9,9,9,9,9]
          ];

        test_ori_Order_wide = [
          [16,16,16,16,16,16]
          ];

        //if trialType is test then this code sets the testType for this trial
        if (trialType ===2||trialType===4 ){
            if (testCondition === 1){
                testType = testOrder_narrow[testBlockCounter-1][testTrialCounter-1];
                console.log("testType set narrow");
                var j;
                for (j=0;j<6;j++){
                    if (trialCounter-1 === j){
                        testTypeINFO[j] = testType;}
                }
            }
            if (testCondition === 2){
                testType = testOrder_med[testBlockCounter-1][testTrialCounter-1];
                console.log("testType set medium");
                        var j;
                for (j=0;j<6;j++){
                    if (trialCounter-1 === j){
                        testTypeINFO[j] = testType;}
                }
            }
            if (testCondition === 3){
                testType = testOrder_wide[testBlockCounter-1][testTrialCounter-1];
                console.log("testType set wide");
                        var j;
                for (j=0;j<6;j++){
                    if (trialCounter-1 === j){
                        testTypeINFO[j] = testType;}
                }
            }
            if (testType === 1){
                test_mid = test_mid_1}
            if (testType === 2){
                test_mid = test_mid_2}
            if (testType === 3){
                test_mid = test_mid_3}
            if (testType === 4){
                test_mid = test_mid_4}
            if (testType === 5){
                test_mid = test_mid_5}
            if (testType === 6){
                test_mid = test_mid_6}
            if (testType === 7){
                test_mid = test_mid_7}
            if (testType === 8){
                test_mid = test_mid_8}
            if (testType === 9){
                test_mid = test_mid_9}
            if (testType === 10){
                test_mid = test_mid_10}
            if (testType === 11){
                test_mid = test_mid_11}
            if (testType === 12){
                test_mid = test_mid_12}
            if (testType === 13){
                test_mid = test_mid_13}
            if (testType === 14){
                test_mid = test_mid_14}
            if (testType === 15){
                test_mid = test_mid_15}
            if (testType === 16){
                test_mid = test_mid_16}
            if (testType === 17){
                test_mid = test_mid_17}
            if (testType === 18){
                test_mid = test_mid_18}
            }
        //if trialType is test then this code sets the testType for this trial
        if (trialType ===5||trialType===6 ){
            if (testCondition === 1){
                testType = [3,3,3,3,3,3];
                console.log("testType set narrow");
                var j;
                for (j=0;j<6;j++){
                    if (trialCounter-1 === j){
                        testTypeINFO[j] = testType;}
                }
            }
            if (testCondition === 2){
                testType = [9,9,9,9,9,9];
                console.log("testType set medium");
                        var j;
                for (j=0;j<6;j++){
                    if (trialCounter-1 === j){
                        testTypeINFO[j] = testType;}
                }
            }
            if (testCondition === 3){
                testType = [16,16,16,16,16,16];
                console.log("testType set wide");
                        var j;
                for (j=0;j<6;j++){
                    if (trialCounter-1 === j){
                        testTypeINFO[j] = testType;}
                }
            }
            if (testType === 3){
                test_mid = test_mid_3}
            if (testType === 9){
                test_mid = test_mid_9}
            if (testType === 16){
                test_mid = test_mid_16}
            }

        //this code sets the ori and training values and coordinates for every trial, not only the ones which are training and orientation
        var theta;
        var thetaVar2;
        for (thetaVar2=0;thetaVar2<(thetasDeg.length);thetaVar2++){
            if (pathCounter === thetaVar2){
                theta = thetas[thetaVar2]
                }}

        pathCounter = pathCounter+1;


        if (trialCounter ===1){
            thetaINFO1 = theta * (180 / Math.PI);
            }
        if (trialCounter ===2){
            thetaINFO2 = theta * (180 / Math.PI);
            }
        if (trialCounter ===3){
            thetaINFO3 = theta * (180 / Math.PI);
            }
        if (trialCounter ===4){
            thetaINFO4 = theta * (180 / Math.PI);
            }
        if (trialCounter ===5){
            thetaINFO5 = theta * (180 / Math.PI);
            }
        if (trialCounter ===6){
            thetaINFO6 = theta * (180 / Math.PI);
            }

        h = 0.6;
        w = 0.15;
        hGoal = (0.6 / 34);
        wMid = (0.15 / 17);

        alpha = Math.atan(w / h) ;
        alphaGoal = Math.atan(((w / 2) / ((h / 2) - hGoal)));
        alphaMid = Math.atan(((wMid / 2) / (h / 2)));

        betaA = (theta)-alpha;
        betaB = (theta)+alpha;

        pathAX = (Math.sin(betaA) * Math.sqrt(Math.pow((w/2),2)+Math.pow((h/2),2)));
        pathAY = (Math.cos(betaA) * Math.sqrt(Math.pow((w/2),2)+Math.pow((h/2),2)));
        pathBX = (Math.sin(betaB) * Math.sqrt(Math.pow((w/2),2)+Math.pow((h/2),2)));
        pathBY = (Math.cos(betaB) * Math.sqrt(Math.pow((w/2),2)+Math.pow((h/2),2)));
        pathCX = -pathBX;
        pathCY = -pathBY;
        pathDX = -pathAX;
        pathDY = -pathAY;

        betaGoalC = theta-alphaGoal;
        betaGoalD = theta+alphaGoal;

        goalCX = (Math.sin(betaGoalC) * Math.sqrt(Math.pow((w/2),2)+Math.pow(((h/2)-hGoal),2)));
        goalCY = (Math.cos(betaGoalC) * Math.sqrt(Math.pow((w/2),2)+Math.pow(((h/2)-hGoal),2)));
        goalDX = (Math.sin(betaGoalD) * Math.sqrt(Math.pow((w/2),2)+Math.pow(((h/2)-hGoal),2)));
        goalDY = (Math.cos(betaGoalD) * Math.sqrt(Math.pow((w/2),2)+Math.pow(((h/2)-hGoal),2)));

        startX = -((goalCX + goalDX) / 2);
        startY = -((goalCY + goalDY) / 2);
        endX = ((pathAX + pathBX) / 2);
        endY = ((pathAY + pathBY) / 2);

        midBetaA = (theta)-alphaMid;
        midBetaB = (theta)+alphaMid;

        midAX = (Math.sin(midBetaA) * Math.sqrt(Math.pow((wMid/2),2)+Math.pow((h/2),2)));
        midAY = (Math.cos(midBetaA) * Math.sqrt(Math.pow((wMid/2),2)+Math.pow((h/2),2)));
        midBX = (Math.sin(midBetaB) * Math.sqrt(Math.pow((wMid/2),2)+Math.pow((h/2),2)));
        midBY = (Math.cos(midBetaB) * Math.sqrt(Math.pow((wMid/2),2)+Math.pow((h/2),2)));

        midCX = -midBX;
        midCY = -midBY;
        midDX = -midAX;
        midDY = -midAY;
  Routine data_loading
    CodeComponent defCond1
      Code Type = JS
      Begin JS Experiment:
        thetas_Condition1 = [
          [0,90,45,45,67.5,22.5],
          [90,45,22.5,0,67.5,22.5],
          [67.5,90,45,0,22.5,0],
          [45,90,22.5,67.5,0,67.5],
          [45,90,67.5,0,22.5,0],
          [67.5,90,45,0,22.5,45],
          [90,67.5,22.5,0,45,67.5],
          [45,67.5,90,22.5,0,67.5],
          [67.5,0,22.5,90,45,22.5],
          [22.5,67.5,0,45,90,67.5],
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          [90,22.5,0,67.5,45,67.5]
        ];
    CodeComponent defCond2
      Code Type = Auto->JS
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    CodeComponent defCond3
      Code Type = Auto->JS
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    CodeComponent defCond4
      Code Type = Auto->JS
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    CodeComponent defCond5
      Code Type = Auto->JS
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    CodeComponent coordinates_test_narrow
      Code Type = Auto->JS
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    CodeComponent coordinates_test_medium
      Code Type = JS
      Begin JS Experiment:
        test_med1_path = [
          [0.276577036788374,-0.234170142861309],
          [0.253451166807424,-0.183160458346217],
          [0.230325296826474,-0.133852750697275],
          [0.207199426845524,-0.0886947176788452],
          [0.184073556864573,-0.0501340570552921],
          [0.160947686883623,-0.0206184665909792],
          [0.137821816902673,-0.000141256371096313],
          [0.114695946921723,0.0190355984073795],
          [0.0915700769407722,0.0375695499527692],
          [0.0684442069598220,0.0552993500120762],
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          [0.180158895335394,-0.349076809329156]
        ];
        test_med1_goal = [
          [-0.165444176475080,0.152713506593874],
          [-0.183049629083012,0.151502422950614],
          [-0.279467770535993,0.0365957564827678],
          [-0.261862317928061,0.0378068401260277]
        ];
        test_med1_mid = [
          [0.231203793751678,-0.288243868257943],
          [0.208077923770727,-0.237234183742851],
          [0.184952053789777,-0.187926476093909],
          [0.161826183808827,-0.142768443075479],
          [0.138700313827876,-0.104207782451926],
          [0.115574443846926,-0.0746921919876130],
          [0.0924485738659759,-0.0542149817677301],
          [0.0693227038850256,-0.0350381269892542],
          [0.0461968339040753,-0.0165041754438645],
          [0.0230709639231251,0.00122562461544249],
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          [0.225532138372090,-0.295003083932522]
        ];
        test_med1_start = [0.221090239543335,-0.275546990725528];

        test_med2_path = [
          [0.249076809329156,-0.280158895335394],
          [0.229671900357487,-0.227938558200004],
          [0.210266991385818,-0.176489324740035],
          [0.190862082414148,-0.127154805433992],
          [0.171457173442479,-0.0812786107603770],
          [0.152052264470810,-0.0402043511976952],
          [0.132647355499141,-0.00527563722445026],
          [0.113242446527472,0.0221639206808541],
          [0.0938375375558029,0.0428707793163432],
          [0.0744326285841338,0.0625900140972175],
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          [0.134170142861309,-0.376577036788374]
        ];
        test_med2_goal = [
          [-0.118971458286595,0.180363760610435],
          [-0.136595756482768,0.179467770535993],
          [-0.251502422950614,0.0830496290830123],
          [-0.233878124754442,0.0839456191574540]
        ];
        test_med2_mid = [
          [0.195003083932522,-0.325532138372090],
          [0.175598174960853,-0.273311801236701],
          [0.156193265989184,-0.221862567776732],
          [0.136788357017515,-0.172528048470689],
          [0.117383448045846,-0.126651853797074],
          [0.0979785390741765,-0.0855775942343921],
          [0.0785736301025074,-0.0506488802611472],
          [0.0591687211308383,-0.0232093223558428],
          [0.0397638121591692,-0.00250246372035372],
          [0.0203589031875001,0.0172167710605206],
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          [0.188243868257943,-0.331203793751678]
        ];
        test_med2_start = [0.185473454858226,-0.311827230772742];

        test_med3_path = [
          [0.249076809329156,-0.280158895335394],
          [0.229671900357487,-0.280591501100506],
          [0.210266991385818,-0.277481367130607],
          [0.190862082414148,-0.271004125997046],
          [0.171457173442479,-0.261335410271176],
          [0.152052264470810,-0.248650852524349],
          [0.132647355499141,-0.233126085327916],
          [0.113242446527472,-0.214936741253229],
          [0.0938375375558029,-0.194258452871640],
          [0.0744326285841338,-0.171266852754500],
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          [0.134170142861309,-0.376577036788374]
        ];
        test_med3_goal = [
          [-0.128369710222401,0.163855248380896],
          [-0.136595756482768,0.179467770535993],
          [-0.251502422950614,0.0830496290830123],
          [-0.243276376690248,0.0674371069279147]
        ];
        test_med3_mid = [
          [0.195003083932522,-0.325532138372090],
          [0.175598174960853,-0.325964744137203],
          [0.156193265989184,-0.322854610167304],
          [0.136788357017515,-0.316377369033743],
          [0.117383448045846,-0.306708653307873],
          [0.0979785390741765,-0.294024095561046],
          [0.0785736301025074,-0.278499328364613],
          [0.0591687211308383,-0.260309984289926],
          [0.0397638121591692,-0.239631695908337],
          [0.0203589031875001,-0.216640095791197],
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          [0.188243868257943,-0.331203793751678]
        ];
        test_med3_start = [0.174072249146056,-0.330204571000247];

        test_med4_path = [
          [-0.276577036788374,0.0341701428613090],
          [-0.253451166807424,-0.0168395416537827],
          [-0.230325296826474,-0.0661472493027252],
          [-0.207199426845524,-0.111305282321155],
          [-0.184073556864573,-0.149865942944708],
          [-0.160947686883623,-0.179381533409021],
          [-0.137821816902673,-0.199858743628904],
          [-0.114695946921722,-0.219035598407380],
          [-0.0915700769407722,-0.237569549952769],
          [-0.0684442069598219,-0.255299350012076],
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          [-0.180158895335394,0.149076809329156]
        ];
        test_med4_goal = [
          [-0.269290394848956,0.0180976964274952],
          [-0.276577036788374,0.0341701428613090],
          [-0.180158895335394,0.149076809329156],
          [-0.172872253395975,0.133004362895342]
        ];
        test_med4_mid = [
          [-0.231203793751678,0.0882438682579428],
          [-0.208077923770727,0.0372341837428511],
          [-0.184952053789777,-0.0120735239060914],
          [-0.161826183808827,-0.0572315569245211],
          [-0.138700313827876,-0.0957922175480742],
          [-0.115574443846926,-0.125307808012387],
          [-0.0924485738659759,-0.145785018232270],
          [-0.0693227038850256,-0.164961873010746],
          [-0.0461968339040753,-0.183495824556136],
          [-0.0230709639231251,-0.201225624615443],
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          [-0.225532138372090,0.0950030839325220]
        ];
        test_med4_start = [0.213721309293799,-0.296013426505740]

        test_med5_path = [
          [-0.249076809329156,0.0801588953353935],
          [-0.229671900357487,0.0279385582000039],
          [-0.210266991385818,-0.0235106752599647],
          [-0.190862082414148,-0.0728451945660084],
          [-0.171457173442479,-0.118721389239623],
          [-0.152052264470810,-0.159795648802305],
          [-0.132647355499141,-0.194724362775550],
          [-0.113242446527472,-0.222163920680854],
          [-0.0938375375558029,-0.242870779316343],
          [-0.0744326285841338,-0.262590014097218],
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          [-0.134170142861309,0.176577036788374]
        ];
        test_med5_goal = [
          [-0.242929896114832,0.0636170047827185],
          [-0.249076809329156,0.0801588953353935],
          [-0.134170142861309,0.176577036788374],
          [-0.128023229646985,0.160035146235699]
        ];
        test_med5_mid = [
          [-0.195003083932522,0.125532138372090],
          [-0.175598174960853,0.0733118012367008],
          [-0.156193265989184,0.0218625677767322],
          [-0.136788357017515,-0.0274719515293115],
          [-0.117383448045846,-0.0733481462029261],
          [-0.0979785390741765,-0.114422405765608],
          [-0.0785736301025074,-0.149351119738853],
          [-0.0591687211308383,-0.176790677644157],
          [-0.0397638121591692,-0.197497536279646],
          [-0.0203589031875000,-0.217216771060521],
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          [-0.188243868257943,0.131203793751678]
        ];
        test_med5_start = [0.176511630876151,-0.333222426505730];

        test_med6_path = [
          [-0.249076809329156,0.0801588953353935],
          [-0.229671900357487,0.0805915011005064],
          [-0.210266991385818,0.0774813671306067],
          [-0.190862082414148,0.0710041259970462],
          [-0.171457173442479,0.0613354102711764],
          [-0.152052264470810,0.0486508525243492],
          [-0.132647355499141,0.0331260853279161],
          [-0.113242446527472,0.0149367412532291],
          [-0.0938375375558029,-0.00574154712836027],
          [-0.0744326285841338,-0.0287331472455004],
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          [-0.134170142861309,0.176577036788374]
        ];
        test_med6_goal = [
          [-0.231434134216224,0.0805522145195758],
          [-0.249076809329156,0.0801588953353935],
          [-0.134170142861309,0.176577036788374],
          [-0.116527467748377,0.176970355972557]
        ];
        test_med6_mid = [
          [-0.195003083932522,0.125532138372090],
          [-0.175598174960853,0.125964744137203],
          [-0.156193265989184,0.122854610167304],
          [-0.136788357017515,0.116377369033743],
          [-0.117383448045846,0.106708653307873],
          [-0.0979785390741765,0.0940240955610461],
          [-0.0785736301025074,0.0784993283646130],
          [-0.0591687211308383,0.0603099842899260],
          [-0.0397638121591692,0.0396316959083366],
          [-0.0203589031875001,0.0166400957911965],
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          [-0.188243868257943,0.131203793751678]
        ];
        test_med6_start = [0.185841770807874,-0.315636324783596];
    CodeComponent coordinates_test_wide
      Code Type = JS
      Begin JS Experiment:
        test_wide1_path = [
          [0.276577036788374,0.0341701428613091],
          [0.253451166807424,-0.0168395416537827],
          [0.230325296826474,-0.0661472493027251],
          [0.207199426845524,-0.111305282321155],
          [0.184073556864573,-0.149865942944708],
          [0.160947686883623,-0.179381533409021],
          [0.137821816902673,-0.199858743628904],
          [0.114695946921723,-0.219035598407380],
          [0.0915700769407722,-0.237569549952769],
          [0.0684442069598220,-0.255299350012076],
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          [0.180158895335394,0.149076809329156]
        ];
        test_wide1_goal = [
          [-0.165444176475080,-0.352713506593874],
          [-0.183049629083012,-0.351502422950614],
          [-0.279467770535993,-0.236595756482768],
          [-0.261862317928061,-0.237806840126028]
        ];
        test_wide1_mid = [
          [0.231203793751678,0.0882438682579428],
          [0.208077923770727,0.0372341837428511],
          [0.184952053789777,-0.0120735239060914],
          [0.161826183808827,-0.0572315569245211],
          [0.138700313827876,-0.0957922175480742],
          [0.115574443846926,-0.125307808012387],
          [0.0924485738659759,-0.145785018232270],
          [0.0693227038850256,-0.164961873010746],
          [0.0461968339040753,-0.183495824556136],
          [0.0230709639231251,-0.201225624615443],
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          [0.225532138372090,0.0950030839325221]
        ];
        test_wide1_start = [0.221090239543335,0.0755469907255280];

        test_wide2_path =[
          [0.249076809329156,0.0801588953353936],
          [0.229671900357487,0.0279385582000040],
          [0.210266991385818,-0.0235106752599647],
          [0.190862082414148,-0.0728451945660083],
          [0.171457173442479,-0.118721389239623],
          [0.152052264470810,-0.159795648802305],
          [0.132647355499141,-0.194724362775550],
          [0.113242446527472,-0.222163920680854],
          [0.0938375375558029,-0.242870779316343],
          [0.0744326285841338,-0.262590014097218],
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          [0.134170142861309,0.176577036788374]
        ];
        test_wide2_goal = [
          [-0.118971458286595,-0.380363760610435],
          [-0.136595756482768,-0.379467770535993],
          [-0.251502422950614,-0.283049629083012],
          [-0.233878124754442,-0.283945619157454]
        ];
        test_wide2_mid = [
          [0.195003083932522,0.125532138372090],
          [0.175598174960853,0.0733118012367008],
          [0.156193265989184,0.0218625677767322],
          [0.136788357017515,-0.0274719515293115],
          [0.117383448045846,-0.0733481462029261],
          [0.0979785390741765,-0.114422405765608],
          [0.0785736301025074,-0.149351119738853],
          [0.0591687211308383,-0.176790677644157],
          [0.0397638121591692,-0.197497536279646],
          [0.0203589031875001,-0.217216771060521],
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          [0.188243868257943,0.131203793751678]
        ];
        test_wide2_start = [0.185473454858226,0.111827230772742];

        test_wide3_path =[
          [0.249076809329156,0.0801588953353936],
          [0.229671900357487,0.0805915011005065],
          [0.210266991385818,0.0774813671306068],
          [0.190862082414148,0.0710041259970462],
          [0.171457173442479,0.0613354102711765],
          [0.152052264470810,0.0486508525243492],
          [0.132647355499141,0.0331260853279162],
          [0.113242446527472,0.0149367412532291],
          [0.0938375375558029,-0.00574154712836025],
          [0.0744326285841338,-0.0287331472455004],
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          [0.134170142861309,0.176577036788374]
        ];
        test_wide3_goal = [
          [-0.128369710222401,-0.363855248380896],
          [-0.136595756482768,-0.379467770535993],
          [-0.251502422950614,-0.283049629083012],
          [-0.243276376690248,-0.267437106927915]
        ];
        test_wide3_mid = [
          [0.195003083932522,0.125532138372090],
          [0.175598174960853,0.125964744137203],
          [0.156193265989184,0.122854610167304],
          [0.136788357017515,0.116377369033743],
          [0.117383448045846,0.106708653307873],
          [0.0979785390741765,0.0940240955610461],
          [0.0785736301025074,0.0784993283646130],
          [0.0591687211308383,0.0603099842899260],
          [0.0397638121591692,0.0396316959083366],
          [0.0203589031875001,0.0166400957911965],
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          [0.188243868257943,0.131203793751678]
        ];
        test_wide3_start = [0.174072249146056,0.130204571000247];

        test_wide4_path =[
          [-0.276577036788374,-0.234170142861309],
          [-0.253451166807424,-0.183160458346217],
          [-0.230325296826474,-0.133852750697275],
          [-0.207199426845524,-0.0886947176788452],
          [-0.184073556864573,-0.0501340570552921],
          [-0.160947686883623,-0.0206184665909792],
          [-0.137821816902673,-0.000141256371096299],
          [-0.114695946921722,0.0190355984073795],
          [-0.0915700769407722,0.0375695499527693],
          [-0.0684442069598219,0.0552993500120763],
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          [-0.180158895335394,-0.349076809329156]
        ];
        test_wide4_goal = [
          [-0.269290394848956,-0.218097696427495],
          [-0.276577036788374,-0.234170142861309],
          [-0.180158895335394,-0.349076809329156],
          [-0.172872253395975,-0.333004362895342]
        ];
        test_wide4_mid = [
          [-0.231203793751678,-0.288243868257943],
          [-0.208077923770727,-0.237234183742851],
          [-0.184952053789777,-0.187926476093909],
          [-0.161826183808827,-0.142768443075479],
          [-0.138700313827876,-0.104207782451926],
          [-0.115574443846926,-0.0746921919876130],
          [-0.0924485738659759,-0.0542149817677300],
          [-0.0693227038850256,-0.0350381269892542],
          [-0.0461968339040753,-0.0165041754438645],
          [-0.0230709639231251,0.00122562461544251],
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          [-0.225532138372090,-0.295003083932522]
        ];
        test_wide4_start = [0.213721309293799,0.0960134265057402];

        test_wide5_path =[
          [-0.249076809329156,-0.280158895335394],
          [-0.229671900357487,-0.227938558200004],
          [-0.210266991385818,-0.176489324740035],
          [-0.190862082414148,-0.127154805433992],
          [-0.171457173442479,-0.0812786107603770],
          [-0.152052264470810,-0.0402043511976952],
          [-0.132647355499141,-0.00527563722445024],
          [-0.113242446527472,0.0221639206808541],
          [-0.0938375375558029,0.0428707793163432],
          [-0.0744326285841338,0.0625900140972175],
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          [-0.134170142861309,-0.376577036788374]
        ];
        test_wide5_goal = [
          [-0.242929896114832,-0.263617004782719],
          [-0.249076809329156,-0.280158895335394],
          [-0.134170142861309,-0.376577036788374],
          [-0.128023229646985,-0.360035146235699]
        ];
        test_wide5_mid = [
          [-0.195003083932522,-0.325532138372090],
          [-0.175598174960853,-0.273311801236701],
          [-0.156193265989184,-0.221862567776732],
          [-0.136788357017515,-0.172528048470689],
          [-0.117383448045846,-0.126651853797074],
          [-0.0979785390741765,-0.0855775942343921],
          [-0.0785736301025074,-0.0506488802611471],
          [-0.0591687211308383,-0.0232093223558428],
          [-0.0397638121591692,-0.00250246372035373],
          [-0.0203589031875000,0.0172167710605206],
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          [-0.188243868257943,-0.331203793751678]
        ];
        test_wide5_start = [0.176511630876151,0.133222426505730];

        test_wide6_path =[
          [-0.249076809329156,-0.280158895335394],
          [-0.229671900357487,-0.280591501100506],
          [-0.210266991385818,-0.277481367130607],
          [-0.190862082414148,-0.271004125997046],
          [-0.171457173442479,-0.261335410271176],
          [-0.152052264470810,-0.248650852524349],
          [-0.132647355499141,-0.233126085327916],
          [-0.113242446527472,-0.214936741253229],
          [-0.0938375375558029,-0.194258452871640],
          [-0.0744326285841338,-0.171266852754500],
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          [-0.134170142861309,-0.376577036788374]
        ];
        test_wide6_goal = [
          [-0.231434134216224,-0.280552214519576],
          [-0.249076809329156,-0.280158895335394],
          [-0.134170142861309,-0.376577036788374],
          [-0.116527467748377,-0.376970355972557]
        ];
        test_wide6_mid = [
          [-0.195003083932522,-0.325532138372090],
          [-0.175598174960853,-0.325964744137203],
          [-0.156193265989184,-0.322854610167304],
          [-0.136788357017515,-0.316377369033743],
          [-0.117383448045846,-0.306708653307873],
          [-0.0979785390741765,-0.294024095561046],
          [-0.0785736301025074,-0.278499328364613],
          [-0.0591687211308383,-0.260309984289926],
          [-0.0397638121591692,-0.239631695908337],
          [-0.0203589031875001,-0.216640095791197],
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          [-0.188243868257943,-0.331203793751678]
        ];
        test_wide6_start = [0.185841770807874,0.115636324783596];
    CodeComponent def_midLine_tests1to3
      Code Type = JS
      Begin JS Experiment:
        test_mid_1 = [
          [-0.228367966061884,-0.291623476095232],
          [-0.225477232314265,-0.285237850215659],
          [-0.222586498566646,-0.278845353106747],
          [-0.219695764819028,-0.272450765428192],
          [-0.216805031071409,-0.266058867839691],
          [-0.213914297323790,-0.259674441000939],
          [-0.211023563576171,-0.253302265571633],
          [-0.208132829828553,-0.246947122211468],
          [-0.205242096080934,-0.240613791580141],
          [-0.202351362333315,-0.234307054337347],
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          [0.231258699809503,0.0940490897166911]
        ];
        test_mid_2 = [
          [-0.191623476095232,-0.328367966061884],
          [-0.189197862473774,-0.321844178373988],
          [-0.186772248852315,-0.315314069506509],
          [-0.184346635230857,-0.308780263698664],
          [-0.181921021609398,-0.302245385189668],
          [-0.179495407987939,-0.295712058218737],
          [-0.177069794366481,-0.289182907025088],
          [-0.174644180745022,-0.282660555847935],
          [-0.172218567123563,-0.276147628926494],
          [-0.169792953502105,-0.269646750499983],
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          [0.194049089716691,0.131258699809503]
        ];
        test_mid_3 = [
          [-0.191623476095232,-0.328367966061884],
          [-0.189197862473774,-0.328621788428185],
          [-0.186772248852315,-0.328817854259565],
          [-0.184346635230857,-0.328956506588391],
          [-0.181921021609398,-0.329038088447027],
          [-0.179495407987939,-0.329062942867839],
          [-0.177069794366481,-0.329031412883195],
          [-0.174644180745022,-0.328943841525458],
          [-0.172218567123563,-0.328800571826997],
          [-0.169792953502105,-0.328601946820176],
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          [0.194049089716691,0.131258699809503]
        ];
    CodeComponent def_midLine_tests4to6
      Code Type = Auto->JS
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    CodeComponent def_midLine_tests7to9
      Code Type = Auto->JS
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    CodeComponent def_midLine_tests10to12
      Code Type = Auto->JS
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    CodeComponent def_midLine_tests13to15
      Code Type = Auto->JS
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    CodeComponent def_midLine_tests16to18
      Code Type = Auto->JS
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    CodeComponent orientation1
      Code Type = Auto->JS
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    CodeComponent orientation2
      Code Type = Auto->JS
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    CodeComponent orientation3
      Code Type = JS
      Begin JS Experiment:
        thetas_orientation3 = [
          [13,14,15,16,17,18],
          ]
  Routine task
    PolygonComponent orangeFrame
      fillColor = $[0,0,0]
      lineColor = $[1.000,0.004,-1.000]
      lineWidth = 10
      pos = (-0.5, 0.35)
      saveStartStop = False
      shape = rectangle
      size = ((0.6/4)+0.04, (0.6/4)+0.04)
      startVal [time (s)] = 0.0
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    ImageComponent grid6
      image = pathImageOnline.png
      ori [set every repeat] = -thetasDeg[5]
      pos = (0.5, 0.35)
      saveStartStop = False
      size = ((0.15/4), (0.6/4))
      startVal [time (s)] = 0.0
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    ImageComponent grid5
      image = pathImageOnline.png
      ori [set every repeat] = -thetasDeg[4]
      pos = (0.3, 0.35)
      saveStartStop = False
      size = ((0.15/4), (0.6/4))
      startVal [time (s)] = 0.0
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    ImageComponent grid4
      image = pathImageOnline.png
      ori [set every repeat] = -thetasDeg[3]
      pos = (0.1, 0.35)
      saveStartStop = False
      size = ((0.15/4), (0.6/4))
      startVal [time (s)] = 0.0
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    ImageComponent grid3
      image = pathImageOnline.png
      ori [set every repeat] = -thetasDeg[2]
      pos = (-0.1, 0.35)
      saveStartStop = False
      size = ((0.15/4), (0.6/4))
      startVal [time (s)] = 0.0
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    ImageComponent grid2
      image = pathImageOnline.png
      ori [set every repeat] = -thetasDeg[1]
      pos = (-0.3, 0.35)
      size = ((0.15/4), (0.6/4))
      startVal [time (s)] = 0.0
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    ImageComponent grid1
      image = pathImageOnline.png
      ori [set every repeat] = -thetasDeg[0]
      pos = (-0.5, 0.35)
      saveStartStop = False
      size = ((0.15/4), (0.6/4))
      startVal [time (s)] = 0.0
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    CodeComponent set_testGrid
      Code Type = JS
      Begin JS Routine:
        //set the small street grid for the test trials if it is a test trial

        if (trialType === 2|| trialType ===4|| trialType ===5|| trialType ===6){
            if (testCondition === 1){
                if (testBlockCounter === 1 || testBlockCounter === 6){
                    testGrid_name = "testGrid_1.png";
                    }
                if (testBlockCounter === 2 || testBlockCounter === 7){
                    testGrid_name = "testGrid_2.png";
                    }
                if (testBlockCounter === 3 || testBlockCounter === 8){
                    testGrid_name = "testGrid_3.png";
                    }
                if (testBlockCounter === 4 || testBlockCounter === 9){
                    testGrid_name = "testGrid_4.png";
                    }
                if (testBlockCounter === 5 || testBlockCounter === 10){
                    testGrid_name = "testGrid_5.png";
                    }
                }
            if (testCondition === 2){
                if (testBlockCounter === 1 || testBlockCounter === 6){
                    testGrid_name = "testGrid_6.png";
                    }
                if (testBlockCounter === 2 || testBlockCounter === 7){
                    testGrid_name = "testGrid_7.png";
                    }
                if (testBlockCounter === 3 || testBlockCounter === 8){
                    testGrid_name = "testGrid_8.png";
                    }
                if (testBlockCounter === 4 || testBlockCounter === 9){
                    testGrid_name = "testGrid_9.png";
                    }
                if (testBlockCounter === 5 || testBlockCounter === 10){
                    testGrid_name = "testGrid_10.png";
                    }
                }
            if (testCondition === 3){
                if (testBlockCounter === 1 || testBlockCounter === 6){
                    testGrid_name = "testGrid_11.png";
                    }
                if (testBlockCounter === 2 || testBlockCounter === 7){
                    testGrid_name = "testGrid_12.png";
                    }
                if (testBlockCounter === 3 || testBlockCounter === 8){
                    testGrid_name = "testGrid_13.png";
                    }
                if (testBlockCounter === 4 || testBlockCounter === 9){
                    testGrid_name = "testGrid_14.png";
                    }
                if (testBlockCounter === 5 || testBlockCounter === 10){
                    testGrid_name = "testGrid_15.png";
                    }
                }
            }
    ImageComponent testGrid
      image [set every repeat] = $testGrid_name
      pos = (0, 0.35)
      saveStartStop = False
      size = (1.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent pathPoly
      fillColor = $[0.7,0.7,0.7]
      lineWidth = 0
      opacity = 0.7
      ori [set every repeat] = 0
      saveStartStop = False
      shape = regular polygon...
      size = (0.1, 0.4)
      startVal [time (s)] = 0.0
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    PolygonComponent midPoly
      fillColor = $[0,1,1]
      lineWidth = 0
      saveStartStop = False
      shape = regular polygon...
      size = ((0.1/17), 0.4)
      startVal [time (s)] = 0.0
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    PolygonComponent goalPoly
      fillColor = $'black'
      lineWidth = 0
      saveStartStop = False
      shape = regular polygon...
      size = (0.1, (0.4/34))
      startVal [time (s)] = 0.0
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    PolygonComponent tracerPoly
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      lineWidth = 3
      saveStartStop = False
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent set_Poly_vertices
      Code Type = Auto->JS
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    PolygonComponent point
      fillColor = $[1,0,0.5]
      nVertices = 20
      pos [set every repeat] = (startX,startY-0.1)
      saveStartStop = False
      shape = regular polygon...
      size = ((0.15/8), (0.15/8))
      startVal [time (s)] = 0.0
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    CodeComponent movePoint
      Code Type = JS
      Begin JS Experiment:
        var startBlockTime;
      Begin JS Routine:
        //start start of trial time which is later subtracted from end of trial time
        TrialDate = new Date();
        startTrialTime = TrialDate.getTime();

        if (trialCounter == 1) {
            startBlockTime = startTrialTime;
        }

        //save trial start time
        if (trialCounter===1){
            starttimeINFO1 = startTrialTime
            }
        if (trialCounter===2){
            starttimeINFO2 = startTrialTime
            }
        if (trialCounter===3){
            starttimeINFO3 = startTrialTime
            }
        if (trialCounter===4){
            starttimeINFO4 = startTrialTime
            }
        if (trialCounter===5){
            starttimeINFO5 = startTrialTime
            }
        if (trialCounter===6){
            starttimeINFO6 = startTrialTime
            }

        //set maximum velocity and acceleration for the point
        maxVel = 0.3;
        point.xVel = 0;
        point.yVel = 0;
        point.xAccel = 0;
        point.yAccel = 0;

        //make arrays to store the position and time of the point
        pix = [startX];
        piy = [startY-0.1];
        pit = [0];

        //make array for the tracerPolygon vertices which updates each frame
        tracerArray = [[startX, startY-0.1],[startX, startY-0.1]];

        //initialise keystates
        keyStateK = false;
        keyStateS = false;
      Each JS Frame:
        pointCurrent = point.pos;

        FrameDate = new Date();
        startFrameTime = FrameDate.getTime();

        //add info of position and time of pointer to arrays
        pit[pit.length]=(startFrameTime-startTrialTime);
        pix[pix.length]=pointCurrent[0];
        piy[piy.length]=pointCurrent[1];
        tracerArray.splice((tracerArray.length/2),0,[pointCurrent[0], pointCurrent[1]],[pointCurrent[0], pointCurrent[1]])

        //define acceleration factor of point movement
        accel = 0.001

        //code for registering key presses and moving point
        document.onkeydown = function() {
            var KeyID = event.key;
            if (KeyID=="k"|| KeyID=="K") {
                point.xAccel += accel;
                keyStateK = true;
            }
            if (KeyID=="s"|| KeyID=="S") {
                point.yAccel += accel;
                keyStateS = true;
            }
        };

        document.onkeyup = function() {
            var KeyID = event.key;
            if (KeyID=="k" || KeyID=="K") {
                point.xAccel = -accel;
                keyStateK = false;
                }
            if (KeyID=="s" || KeyID=="S") {

                point.yAccel = -accel;
                keyStateS = false;
            }
        };

        //slowing down
        if (point.xVel <= 0 && point.xAccel < 0) {
            point.xAccel = 0;
            }
        if (point.yVel <= 0 && point.yAccel < 0) {
            point.yAccel = 0;
            }

        //add velocity if accelerating
        if (point.xVel < maxVel) {
            point.xVel += point.xAccel;
            }
        if (point.yVel < maxVel) {
            point.yVel += point.yAccel;
            }

        //no negative velocity
        if (point.xVel < 0) {
            point.xVel = 0;
            }
        if (point.yVel < 0) {
            point.yVel = 0;
            }

        //direction changes in certain test conditions
        if (trialType === 1|| trialType === 3){
            point.pos = [pointCurrent[0] + point.xVel, pointCurrent[1] + point.yVel];
        } else if ((trialType === 2 || trialType === 4 || trialType ===5|| trialType ===6) && (testCondition === 1)){
            point.pos = [pointCurrent[0] + point.xVel, pointCurrent[1] + point.yVel];
        } else if ((trialType === 2 || trialType === 4 || trialType ===5|| trialType ===6) && (testCondition === 2)){
            point.pos = [pointCurrent[0] - point.xVel, pointCurrent[1] + point.yVel];
        } else if ((trialType === 2 || trialType === 4 || trialType ===5|| trialType ===6) && (testCondition === 3)){
            point.pos = [pointCurrent[0] - point.xVel, pointCurrent[1] - point.yVel];
        }
      End JS Routine:
        //set INFOs to the positin and time arrays so they can later be stored in the data file
        if (trialCounter === 1){
            pitINFO1 = pit
            pixINFO1 = pix
            piyINFO1 = piy
            }
        if (trialCounter === 2){
            pitINFO2 = pit
            pixINFO2 = pix
            piyINFO2 = piy
            }
        if (trialCounter === 3){
            pitINFO3 = pit
            pixINFO3 = pix
            piyINFO3 = piy
            }
        if (trialCounter === 4){
            pitINFO4 = pit
            pixINFO4 = pix
            piyINFO4 = piy
            }
        if (trialCounter === 5){
            pitINFO5 = pit
            pixINFO5 = pix
            piyINFO5 = piy
            }
        if (trialCounter === 6){
            pitINFO6 = pit
            pixINFO6 = pix
            piyINFO6 = piy
            }
    CodeComponent goal_and_reset
      Code Type = Auto->JS
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      Each Frame:
        if pathPoly.contains(point, 'norm')==False:



            point.pos = ((-1)*startVertX,(-1)*startVertY)
    CodeComponent errorCalc
      Code Type = JS
      Begin JS Experiment:
        //error all trials is an array that contains the RMS errors of every trial (single path) done in the experiment
        error_allTrials = [];

        //error single trial is an array that contains every distance from the midline for every frame for the current or most recent trial (single path)
        error_singleTrial = [];

        //feedback error is to store the error displayed at feedback
        feedbackError = [];
      Begin JS Routine:
        //minDistList stores the minimum error distances for each frame of the trial for test trials
        minDistList = [];
      Each JS Frame:
        //get current position of point
        pX = point.pos[0];
        pY= point.pos[1];

        //when orientation or training use harons formula as follows
        if ((pathPoly.contains(point, "norm") === true) && (point.yVel + point.xVel !== 0)&&(trialType === 1 || trialType === 3)){
            //calc the sides of the triangle
            var lengStartEnd_X = Math.abs(startX - endX)
            var lengStartEnd_Y = Math.abs((startY-0.1) - (endY-0.1))
            var lengStartEnd = Math.sqrt((Math.pow(lengStartEnd_X,2)) + (Math.pow(lengStartEnd_Y,2)));

            var lengPointStart_X = Math.abs(pX - startX);
            var lengPointStart_Y = Math.abs(pY - (startY-0.1));
            var lengPointStart = Math.sqrt((Math.pow(lengPointStart_X,2)) + (Math.pow(lengPointStart_Y,2)));

            var lengPointEnd_X = Math.abs(pX - endX);
            var lengPointEnd_Y = Math.abs(pY - (endY-0.1));
            var lengPointEnd = Math.sqrt((Math.pow(lengPointEnd_X,2)) + (Math.pow(lengPointEnd_Y,2)));

            //calc the height of the triangle on the frame
            var sFrame = (lengPointStart + lengPointEnd +lengStartEnd) / 2;
            var areaFrame = Math.sqrt(Math.abs(sFrame*(sFrame-lengStartEnd)*(sFrame-lengPointStart)*(sFrame-lengPointEnd)));
            var triHeight = (areaFrame * 2) / lengStartEnd;

            //add triangle height of frame to the trial error array

            error_singleTrial[error_singleTrial.length]=triHeight;
        };

        //when test trial check distance to individual coordinates as follows
        if ((pathPoly.contains(point, "norm") === true) && (point.yVel + point.xVel !== 0)&&(trialType === 2 || trialType === 4|| trialType ===5|| trialType ===6)){
            var m;
            minDist = 10;
            for (m=0; m<test_mid.length;m++){
                var distance = Math.sqrt(Math.pow(pX-test_mid[m][0],2)+(Math.pow(pY-test_mid[m][1],2)));
                if (distance < minDist){
                    minDist = distance
                }
            }
            minDistList.push(minDist);
            error_singleTrial[error_singleTrial.length]=minDist;
        };

        //save previous method incase Math.sqrt((test_mid[m][0]-pX,2)+(Math.pow(test_mid[m][1]-pY,2)))
      End JS Routine:
        //define the root mean square fuction
        function RMS(ary){
            var sum_of_squares = ary.reduce(function(s,x) {return (s + x*x)}, 0);
            return Math.sqrt(sum_of_squares / ary.length);
        };

        //add the RMS of the error single trial list to the error all trials list
        if (trialType === 1|| trialType ===3){
            error_allTrials[error_allTrials.length]= RMS(error_singleTrial);
            }

        if (trialType === 2|| trialType ===4 || trialType ===5|| trialType ===6){
            error_allTrials[error_allTrials.length]= RMS(error_singleTrial)
            }

        //store the error as INFO for later assignment to the output data file
        if (trialCounter===1){
            errINFO1 = 100 * RMS(error_singleTrial)
            }
        if (trialCounter===2){
            errINFO2 = 100 * RMS(error_singleTrial)
            }
        if (trialCounter===3){
            errINFO3 = 100 * RMS(error_singleTrial)
            }
        if (trialCounter===4){
            errINFO4 = 100 * RMS(error_singleTrial)
            }
        if (trialCounter===5){
            errINFO5 = 100 * RMS(error_singleTrial)
            }
        if (trialCounter===6){
            errINFO6 = 100 * RMS(error_singleTrial)
            }

        //reset error single trial for next trial
        error_singleTrial=[];

        //assign to feedback screen if it is 6th trial
        if (trialCounter === 6) {
            var lastSixError = error_allTrials.slice(Math.max(error_allTrials.length - 6, 0));
            feedbackError[feedbackError.length] = lastSixError.reduce(function(a, b){
                return a + b;
            }, 0);
        };
    CodeComponent moveOrangeFrame
      Code Type = JS
      Begin JS Experiment:
        //set coordinates for the orange frame on 6 trials
        frameCoors = [0,-0.5,-0.3,-0.1,0.1,0.3,0.5];
      Begin JS Routine:
        //set frame coordinates depending on trialCounter
        var tcInd;
        var frameCoor;
        if (trialType ===2|| trialType ===4 || trialType ===3){
            for (tcInd=1; tcInd<7; tcInd++){
            if (trialCounter == tcInd){
                frameCoor = frameCoors[tcInd]
                }
                }
            }

        orangeFrame.pos = [frameCoor, 0.35];
    CodeComponent set_GridOpacities
      Code Type = JS
      Begin JS Routine:
        //depending on the trialType either the normal or test small street grid is opaque
        if (trialType ===2|| trialType ===4){
            grid6.opacity = 0;
            grid5.opacity = 0;
            grid4.opacity = 0;
            grid3.opacity = 0;
            grid2.opacity = 0;
            grid1.opacity = 0;
            testGrid.opacity= 1;
            } else if (trialType===3){
                    grid6.opacity = 1;
                    grid5.opacity = 1;
                    grid4.opacity = 1;
                    grid3.opacity = 1;
                    grid2.opacity = 1;
                    grid1.opacity = 1;
                    testGrid.opacity=0;
                    }
                else if (trialType===1 ){
                    grid6.opacity = 0;
                    grid5.opacity = 0;
                    grid4.opacity = 0;
                    grid3.opacity = 0;
                    grid2.opacity = 0;
                    grid1.opacity = 0;
                    testGrid.opacity=0;
                    }
Flow
  Routine welcome
  LoopInitiator PIS_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 3
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    Routine PIS
  LoopTerminator PIS_loop
  LoopInitiator Consent_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 7
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    Routine Consent
  LoopTerminator Consent_loop
  Routine BIMQinstr
  LoopInitiator BIMQ_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 16
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    Routine BimanualQs
  LoopTerminator BIMQ_loop
  Routine AMIinstr
  LoopInitiator AMI_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 30
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    Routine AMI
  LoopTerminator AMI_loop
  LoopInitiator INS_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 5
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    Routine INS
  LoopTerminator INS_loop
  Routine data_loading
  LoopInitiator blocks loopType="TrialHandler"
    loopType = sequential
    nReps = 113
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    Routine set_each_block
    LoopInitiator trials loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 6
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      Routine set_each_trial
      Routine part_text
      Routine preFix
      Routine task
      Routine oFix
      Routine trailFeedback
    LoopTerminator trials
    Routine saveBlockData
  LoopTerminator blocks
  Routine endText
